PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = Main
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent primeImage
      image [set every repeat] = $primeStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent blankSection
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.125
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    ImageComponent targetImage
      image [set every repeat] = $targetStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.225
      stopVal [duration (s)] = 0.125
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    NoiseStimComponent responseSection
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.350
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    KeyboardComponent responseKeyboard
      allowedKeys = 'e','i'
      forceEndRoutine = True
      startVal [time (s)] = 0.350
      store = first key
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  Routine trialInstruction
    TextComponent trialInstructionText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        حال که مکان کلید خوشایندی و ناخوشایندی را یاد گرفتید،
        وارد آزمون اصلی می‌شویم که از تعداد تصاویر بیشتری تشکیل شده
        و پاسخ‌های شما در آن ثبت می‌شود.

        لطفاً برای شروع کلید فاصله را فشار دهید.
    KeyboardComponent trialInstructionKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practiceInstruction
    TextComponent practiceInstructionText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        بر روی صفحه‌ی مانیتور پیش از هر حرف الفبای چینی
        یک تصویر مربوط به یک چشم‌انداز روزانه ظاهر می‌شود
        و خیلی مهم است که بدون متأثر شدن از از این تصاویر بر ارزیابی حرف چینی تمرکز کنید.

        اگر حرف چینی به نظرتان خوشایند آمد، بعد از نمایش صفحه‌ی سیاه و سفید
        کلید I و اگر ناخوشایند بود کلید E را فشار دهید.

        درصورت آمادگی برای تمرین آزمون و آشنایی با آن،
        کلید فاصله را فشار دهید.
    KeyboardComponent practiceInstructionKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    CodeComponent practiceCode
      Code Type = Py
      Begin Experiment:
        practiceKey = ''
      Begin Routine:
        practiceKey = ''
      End Routine:
        practiceKey = practiceResponseKeyboard.keys
    ImageComponent practicePrimeImage
      image [set every repeat] = $primeStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent practiceBlankSection
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.125
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    ImageComponent practiceTargetImage
      image [set every repeat] = $targetStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.225
      stopVal [duration (s)] = 0.125
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    NoiseStimComponent practiceResponseSection
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.350
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    KeyboardComponent practiceResponseKeyboard
      allowedKeys = 'e','i'
      forceEndRoutine = True
      startVal [time (s)] = 0.350
      store = first key
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  Routine practiceFeedback
    CodeComponent feedbackCode
      Code Type = Py
      Begin Routine:
        if practiceKey == 'e' :
            feedbackEntryText = "خوشایند"
        else :
            feedbackEntryText = "ناخوشایند"
    TextComponent feedbackText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.060
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.45
      text [set during: practiceFeedback.feedbackISI] = $feedbackEntryText
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    StaticComponent feedbackISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine finish
    TextComponent finishText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.050
      startVal [time (s)] = 0.0
      text = از همکاری شما سپاسگذاریم.
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    KeyboardComponent finishKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine practiceInstruction
  LoopInitiator practices loopType="TrialHandler"
    Selected rows = 20:30
    conditionsFile = Images.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('primeStim', 'Primes/C-1.jpg'), ('targetStim', 'Targets/T (1).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-2.jpg'), ('targetStim', 'Targets/T (2).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-7.jpg'), ('targetStim', 'Targets/T (37).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-6.jpg'), ('targetStim', 'Targets/T (26).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (45).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-10.jpg'), ('targetStim', 'Targets/T (40).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-7.jpg'), ('targetStim', 'Targets/T (7).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (55).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-6.jpg'), ('targetStim', 'Targets/T (56).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-10.jpg'), ('targetStim', 'Targets/T (10).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-4.jpg'), ('targetStim', 'Targets/T (34).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (35).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-3.jpg'), ('targetStim', 'Targets/T (13).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-4.jpg'), ('targetStim', 'Targets/T (14).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-8.jpg'), ('targetStim', 'Targets/T (58).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-8.jpg'), ('targetStim', 'Targets/T (18).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-10.jpg'), ('targetStim', 'Targets/T (60).BMP')])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
    Routine practice
    Routine practiceFeedback
  LoopTerminator practices
  Routine trialInstruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('primeStim', 'Primes/C-1.jpg'), ('targetStim', 'Targets/T (1).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-2.jpg'), ('targetStim', 'Targets/T (2).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-7.jpg'), ('targetStim', 'Targets/T (37).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-6.jpg'), ('targetStim', 'Targets/T (26).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (45).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-10.jpg'), ('targetStim', 'Targets/T (40).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-7.jpg'), ('targetStim', 'Targets/T (7).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (55).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-6.jpg'), ('targetStim', 'Targets/T (56).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-10.jpg'), ('targetStim', 'Targets/T (10).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-4.jpg'), ('targetStim', 'Targets/T (34).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-5.jpg'), ('targetStim', 'Targets/T (35).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-3.jpg'), ('targetStim', 'Targets/T (13).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-4.jpg'), ('targetStim', 'Targets/T (14).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-8.jpg'), ('targetStim', 'Targets/T (58).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-8.jpg'), ('targetStim', 'Targets/T (18).BMP')]),
      OrderedDict([('primeStim', 'Primes/S-10.jpg'), ('targetStim', 'Targets/T (60).BMP')])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
    Routine trial
  LoopTerminator trials
  Routine finish
